CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:OrigBlue
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MedianFilter:[module_num:5|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
    Select the input image:OrigBlue
    Name the output image:MedianFilteredBlue
    Window:1

Opening:[module_num:6|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
    Select the input image:MedianFilteredBlue
    Name the output image:OpenedBlue
    Structuring element:Disk,1

RunCellpose:[module_num:7|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
    Select the input image:OpenedBlue
    Rescale images before running Cellpose:Yes
    Run CellPose in docker or local python environment:Python
    Select Cellpose docker image:cellprofiler/runcellpose_with_pretrained:0.1
    Expected object diameter:20
    Detection mode:nuclei
    Name the output object:CellposeNuclei
    Use GPU:Yes
    Use averaging:No
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:1.0
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:10
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigBlue
    Name the output image:CellposeNucleiOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:CellposeNuclei

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:CellposeNucleiOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:No
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    Saved file format:h5
    Output file location:Elsewhere...|results/cv2/ROIs
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|results/cv2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:_Cell_viability
    Overwrite existing files without warning?:Yes
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