CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-Z]\d+)\_(?P<Stain>\w+)_z(?P<Field>[0-9]{2})_t(?P<Time>[0-9]{2}).tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:OrigBlue
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MedianFilter:[module_num:5|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
    Select the input image:OrigBlue
    Name the output image:MedianFilteredBlue
    Window:1

Opening:[module_num:6|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
    Select the input image:MedianFilteredBlue
    Name the output image:OpenedBlue
    Structuring element:Disk,1

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:OpenedBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:5
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    Thresholding method:Otsu

OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigBlue
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#008000
    Select objects to display:Nuclei

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:NucleiOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigBlue
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|ROIs/
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|results/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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